
includeFile = ../Parameters/SimulationParameters.txt

############################################### Create Electrons Beams Sequence ###################################################

s:So/ElectronSource/Type                     = "Beam"
s:So/ElectronSource/Component                = "BeamPosition"
s:So/ElectronSource/BeamParticle             = "e-"

#d:So/ElectronSource/BeamEnergy               = 6 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5       #deltaE = 0.3MeV

#d:So/ElectronSource/BeamEnergy               = 6.5 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5       #deltaE = 0.33MeV

#d:So/ElectronSource/BeamEnergy               = 7 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5

#d:So/ElectronSource/BeamEnergy               = 7.5 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5   

d:So/ElectronSource/BeamEnergy               = 10 MeV
u:So/ElectronSource/BeamEnergySpread         = 5        #deltaE = 0.5MeV

#d:So/ElectronSource/BeamEnergy               = 12 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5        

#d:So/ElectronSource/BeamEnergy               = 15 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5       

#d:So/ElectronSource/BeamEnergy               = 18 MeV
#u:So/ElectronSource/BeamEnergySpread         = 5        #deltaE = 0.9MeV

s:So/ElectronSource/BeamPositionDistribution = "Gaussian"
s:So/ElectronSource/BeamPositionCutoffShape  = "Ellipse"
d:So/ElectronSource/BeamPositionCutoffX      = 1.2 mm 
d:So/ElectronSource/BeamPositionCutoffY      = 1.2 mm
d:So/ElectronSource/BeamPositionSpreadX      = 0.6 mm     
d:So/ElectronSource/BeamPositionSpreadY      = 0.6 mm

s:So/ElectronSource/BeamAngularDistribution  = "None"

ic:So/ElectronSource/NumberOfHistoriesInRun = 2000000
#ic:So/ElectronSource/NumberOfHistoriesInRun = 100