includeFile = ../Parameters/SimulationParameters.txt

####### 1

s:Ge/PlaneAirIonChamber1D/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber1D/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber1D/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber1D/Wall1/RMax             = 3.0 cm
d:Ge/PlaneAirIonChamber1D/Wall1/TransZ           = 65.0 cm 
d:Ge/PlaneAirIonChamber1D/Wall1/TransY           = 5.0 cm  
d:Ge/PlaneAirIonChamber1D/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber1D/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber1D/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber1D/Active/Parent         = "World"
s:Ge/PlaneAirIonChamber1D/Active/Type           = "TsCylinder"
s:Ge/PlaneAirIonChamber1D/Active/Material       = "Air"
d:Ge/PlaneAirIonChamber1D/Active/RMax           = Ge/PlaneAirIonChamber1D/Wall1/RMax cm
d:Ge/PlaneAirIonChamber1D/Active/TransZ         = Ge/PlaneAirIonChamber1D/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber1D/Active/TransY         = Ge/PlaneAirIonChamber1D/Wall1/TransY cm
d:Ge/PlaneAirIonChamber1D/Active/HL             = 0.025 cm
s:Ge/PlaneAirIonChamber1D/Active/Color          = "Green"
s:Ge/PlaneAirIonChamber1D/Active/DrawingStyle   = "Solid"

s:Ge/PlaneAirIonChamber1D/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber1D/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber1D/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber1D/Wall2/RMax             = Ge/PlaneAirIonChamber1D/Wall1/RMax cm
d:Ge/PlaneAirIonChamber1D/Wall2/TransZ           = Ge/PlaneAirIonChamber1D/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber1D/Wall2/TransY           = Ge/PlaneAirIonChamber1D/Wall1/TransY cm
d:Ge/PlaneAirIonChamber1D/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber1D/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber1D/Wall2/DrawingStyle     = "Solid"


######## 2

s:Ge/PlaneAirIonChamberD2/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD2/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD2/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD2/Wall1/RMax             = Ge/PlaneAirIonChamber1D/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD2/Wall1/TransZ           = Ge/PlaneAirIonChamber1D/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD2/Wall1/TransY           = Ge/PlaneAirIonChamber1D/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD2/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD2/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamberD2/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD2/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD2/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD2/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD2/Active/RMax            = Ge/PlaneAirIonChamberD2/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD2/Active/TransZ          = Ge/PlaneAirIonChamberD2/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD2/Active/TransY          = Ge/PlaneAirIonChamberD2/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD2/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD2/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD2/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD2/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD2/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD2/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD2/Wall2/RMax             = Ge/PlaneAirIonChamberD2/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD2/Wall2/TransZ           = Ge/PlaneAirIonChamberD2/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD2/Wall2/TransY           = Ge/PlaneAirIonChamberD2/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD2/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD2/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamberD2/Wall2/DrawingStyle     = "Solid"

######## 3

s:Ge/PlaneAirIonChamberD3/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD3/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD3/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD3/Wall1/RMax             = Ge/PlaneAirIonChamberD2/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD3/Wall1/TransZ           = Ge/PlaneAirIonChamberD2/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD3/Wall1/TransY           = Ge/PlaneAirIonChamberD2/Wall1/TransY + 0.1  cm  
d:Ge/PlaneAirIonChamberD3/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD3/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD3/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD3/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD3/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD3/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD3/Active/RMax            = Ge/PlaneAirIonChamberD3/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD3/Active/TransZ          = Ge/PlaneAirIonChamberD3/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD3/Active/TransY          = Ge/PlaneAirIonChamberD3/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD3/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD3/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD3/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD3/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD3/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD3/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD3/Wall2/RMax             = Ge/PlaneAirIonChamberD3/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD3/Wall2/TransZ           = Ge/PlaneAirIonChamberD3/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD3/Wall2/TransY           = Ge/PlaneAirIonChamberD3/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD3/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD3/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD3/Wall2/DrawingStyle     = "Solid"

######## 4

s:Ge/PlaneAirIonChamberD4/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD4/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD4/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD4/Wall1/RMax             = Ge/PlaneAirIonChamberD3/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD4/Wall1/TransZ           = Ge/PlaneAirIonChamberD3/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD4/Wall1/TransY           = Ge/PlaneAirIonChamberD3/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD4/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD4/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamberD4/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD4/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD4/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD4/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD4/Active/RMax            = Ge/PlaneAirIonChamberD4/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD4/Active/TransZ          = Ge/PlaneAirIonChamberD4/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD4/Active/TransY          = Ge/PlaneAirIonChamberD4/Wall1/TransY cm 
d:Ge/PlaneAirIonChamberD4/Active/HL              = 0.025 cm 
s:Ge/PlaneAirIonChamberD4/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD4/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD4/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD4/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD4/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD4/Wall2/RMax             = Ge/PlaneAirIonChamberD4/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD4/Wall2/TransZ           = Ge/PlaneAirIonChamberD4/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD4/Wall2/TransY           = Ge/PlaneAirIonChamberD4/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD4/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD4/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamberD4/Wall2/DrawingStyle     = "Solid"

######## 5

s:Ge/PlaneAirIonChamberD5/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD5/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD5/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD5/Wall1/RMax             = Ge/PlaneAirIonChamberD4/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD5/Wall1/TransZ           = Ge/PlaneAirIonChamberD4/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD5/Wall1/TransY           = Ge/PlaneAirIonChamberD4/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD5/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD5/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD5/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD5/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD5/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD5/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD5/Active/RMax            = Ge/PlaneAirIonChamberD5/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD5/Active/TransZ          = Ge/PlaneAirIonChamberD5/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD5/Active/TransY          = Ge/PlaneAirIonChamberD5/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD5/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD5/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD5/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD5/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD5/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD5/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD5/Wall2/RMax             = Ge/PlaneAirIonChamberD5/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD5/Wall2/TransZ           = Ge/PlaneAirIonChamberD5/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD5/Wall2/TransY           = Ge/PlaneAirIonChamberD5/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD5/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD5/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD5/Wall2/DrawingStyle     = "Solid"

######## 6

s:Ge/PlaneAirIonChamberD6/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD6/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD6/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD6/Wall1/RMax             = Ge/PlaneAirIonChamberD5/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD6/Wall1/TransZ           = Ge/PlaneAirIonChamberD5/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD6/Wall1/TransY           = Ge/PlaneAirIonChamberD5/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD6/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD6/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamberD6/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD6/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD6/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD6/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD6/Active/RMax            = Ge/PlaneAirIonChamberD6/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD6/Active/TransZ          = Ge/PlaneAirIonChamberD6/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD6/Active/TransY          = Ge/PlaneAirIonChamberD6/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD6/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD6/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD6/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD6/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD6/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD6/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD6/Wall2/RMax             = Ge/PlaneAirIonChamberD6/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD6/Wall2/TransZ           = Ge/PlaneAirIonChamberD6/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD6/Wall2/TransY           = Ge/PlaneAirIonChamberD6/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD6/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD6/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamberD6/Wall2/DrawingStyle     = "Solid"

######## 7

s:Ge/PlaneAirIonChamberD7/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD7/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD7/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD7/Wall1/RMax             = Ge/PlaneAirIonChamberD6/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD7/Wall1/TransZ           = Ge/PlaneAirIonChamberD6/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD7/Wall1/TransY           = Ge/PlaneAirIonChamberD6/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD7/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD7/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD7/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD7/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD7/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD7/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD7/Active/RMax            = Ge/PlaneAirIonChamberD7/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD7/Active/TransZ          = Ge/PlaneAirIonChamberD7/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD7/Active/TransY          = Ge/PlaneAirIonChamberD7/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD7/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD7/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD7/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD7/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD7/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD7/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD7/Wall2/RMax             = Ge/PlaneAirIonChamberD7/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD7/Wall2/TransZ           = Ge/PlaneAirIonChamberD7/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD7/Wall2/TransY           = Ge/PlaneAirIonChamberD7/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD7/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD7/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD7/Wall2/DrawingStyle     = "Solid"

######## 8

s:Ge/PlaneAirIonChamberD8/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD8/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD8/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD8/Wall1/RMax             = Ge/PlaneAirIonChamberD7/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD8/Wall1/TransZ           = Ge/PlaneAirIonChamberD7/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD8/Wall1/TransY           = Ge/PlaneAirIonChamberD7/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD8/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD8/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamberD8/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD8/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD8/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD8/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD8/Active/RMax            = Ge/PlaneAirIonChamberD8/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD8/Active/TransZ          = Ge/PlaneAirIonChamberD8/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD8/Active/TransY          = Ge/PlaneAirIonChamberD8/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD8/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD8/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD8/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD8/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD8/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD8/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD8/Wall2/RMax             = Ge/PlaneAirIonChamberD8/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD8/Wall2/TransZ           = Ge/PlaneAirIonChamberD8/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD8/Wall2/TransY           = Ge/PlaneAirIonChamberD8/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD8/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD8/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamberD8/Wall2/DrawingStyle     = "Solid"


######## 9

s:Ge/PlaneAirIonChamberD9/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD9/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD9/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD9/Wall1/RMax             = Ge/PlaneAirIonChamberD8/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD9/Wall1/TransZ           = Ge/PlaneAirIonChamberD8/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD9/Wall1/TransY           = Ge/PlaneAirIonChamberD8/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD9/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD9/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD9/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD9/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD9/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD9/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD9/Active/RMax            = Ge/PlaneAirIonChamberD9/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD9/Active/TransZ          = Ge/PlaneAirIonChamberD9/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD9/Active/TransY          = Ge/PlaneAirIonChamberD9/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD9/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD9/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD9/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD9/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD9/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD9/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD9/Wall2/RMax             = Ge/PlaneAirIonChamberD9/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD9/Wall2/TransZ           = Ge/PlaneAirIonChamberD9/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD9/Wall2/TransY           = Ge/PlaneAirIonChamberD9/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD9/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD9/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD9/Wall2/DrawingStyle     = "Solid"

######## 10

s:Ge/PlaneAirIonChamberD10/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamberD10/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD10/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD10/Wall1/RMax             = Ge/PlaneAirIonChamberD9/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamberD10/Wall1/TransZ           = Ge/PlaneAirIonChamberD9/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamberD10/Wall1/TransY           = Ge/PlaneAirIonChamberD9/Wall1/TransY + 0.1 cm  
d:Ge/PlaneAirIonChamberD10/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamberD10/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD10/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamberD10/Active/Parent          = "World"
s:Ge/PlaneAirIonChamberD10/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamberD10/Active/Material        = "Air"
d:Ge/PlaneAirIonChamberD10/Active/RMax            = Ge/PlaneAirIonChamberD10/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD10/Active/TransZ          = Ge/PlaneAirIonChamberD10/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamberD10/Active/TransY          = Ge/PlaneAirIonChamberD10/Wall1/TransY cm  
d:Ge/PlaneAirIonChamberD10/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamberD10/Active/Color           = "Green"
s:Ge/PlaneAirIonChamberD10/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamberD10/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamberD10/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamberD10/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamberD10/Wall2/RMax             = Ge/PlaneAirIonChamberD10/Wall1/RMax cm
d:Ge/PlaneAirIonChamberD10/Wall2/TransZ           = Ge/PlaneAirIonChamberD10/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamberD10/Wall2/TransY           = Ge/PlaneAirIonChamberD10/Wall1/TransY cm
d:Ge/PlaneAirIonChamberD10/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamberD10/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamberD10/Wall2/DrawingStyle     = "Solid"

####### 1

s:Ge/PlaneAirIonChamber1U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber1U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber1U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber1U/Wall1/RMax             = 3.0 cm
d:Ge/PlaneAirIonChamber1U/Wall1/TransZ           = 65.0 cm 
d:Ge/PlaneAirIonChamber1U/Wall1/TransY           = -5.0 cm  
d:Ge/PlaneAirIonChamber1U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber1U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber1U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber1U/Active/Parent         = "World"
s:Ge/PlaneAirIonChamber1U/Active/Type           = "TsCylinder"
s:Ge/PlaneAirIonChamber1U/Active/Material       = "Air"
d:Ge/PlaneAirIonChamber1U/Active/RMax           = Ge/PlaneAirIonChamber1U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber1U/Active/TransZ         = Ge/PlaneAirIonChamber1U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber1U/Active/TransY         = Ge/PlaneAirIonChamber1U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber1U/Active/HL             = 0.025 cm
s:Ge/PlaneAirIonChamber1U/Active/Color          = "Green"
s:Ge/PlaneAirIonChamber1U/Active/DrawingStyle   = "Solid"

s:Ge/PlaneAirIonChamber1U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber1U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber1U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber1U/Wall2/RMax             = Ge/PlaneAirIonChamber1U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber1U/Wall2/TransZ           = Ge/PlaneAirIonChamber1U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber1U/Wall2/TransY           = Ge/PlaneAirIonChamber1U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber1U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber1U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber1U/Wall2/DrawingStyle     = "Solid"


######## 2

s:Ge/PlaneAirIonChamber2U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber2U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber2U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber2U/Wall1/RMax             = Ge/PlaneAirIonChamber1U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber2U/Wall1/TransZ           = Ge/PlaneAirIonChamber1U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber2U/Wall1/TransY           = Ge/PlaneAirIonChamber1U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber2U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber2U/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamber2U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber2U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber2U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber2U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber2U/Active/RMax            = Ge/PlaneAirIonChamber2U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber2U/Active/TransZ          = Ge/PlaneAirIonChamber2U/Wall1/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber2U/Active/TransY          = Ge/PlaneAirIonChamber2U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber2U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber2U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber2U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber2U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber2U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber2U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber2U/Wall2/RMax             = Ge/PlaneAirIonChamber2U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber2U/Wall2/TransZ           = Ge/PlaneAirIonChamber2U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber2U/Wall2/TransY           = Ge/PlaneAirIonChamber2U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber2U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber2U/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamber2U/Wall2/DrawingStyle     = "Solid"

######## 3

s:Ge/PlaneAirIonChamber3U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber3U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber3U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber3U/Wall1/RMax             = Ge/PlaneAirIonChamber2U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber3U/Wall1/TransZ           = Ge/PlaneAirIonChamber2U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber3U/Wall1/TransY           = Ge/PlaneAirIonChamber2U/Wall1/TransY - 0.1  cm  
d:Ge/PlaneAirIonChamber3U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber3U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber3U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber3U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber3U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber3U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber3U/Active/RMax            = Ge/PlaneAirIonChamber3U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber3U/Active/TransZ          = Ge/PlaneAirIonChamber3U/Wall1/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber3U/Active/TransY          = Ge/PlaneAirIonChamber3U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber3U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber3U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber3U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber3U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber3U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber3U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber3U/Wall2/RMax             = Ge/PlaneAirIonChamber3U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber3U/Wall2/TransZ           = Ge/PlaneAirIonChamber3U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber3U/Wall2/TransY           = Ge/PlaneAirIonChamber3U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber3U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber3U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber3U/Wall2/DrawingStyle     = "Solid"

######## 4

s:Ge/PlaneAirIonChamber4U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber4U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber4U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber4U/Wall1/RMax             = Ge/PlaneAirIonChamber3U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber4U/Wall1/TransZ           = Ge/PlaneAirIonChamber3U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber4U/Wall1/TransY           = Ge/PlaneAirIonChamber3U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber4U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber4U/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamber4U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber4U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber4U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber4U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber4U/Active/RMax            = Ge/PlaneAirIonChamber4U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber4U/Active/TransZ          = Ge/PlaneAirIonChamber4U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber4U/Active/TransY          = Ge/PlaneAirIonChamber4U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber4U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber4U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber4U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber4U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber4U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber4U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber4U/Wall2/RMax             = Ge/PlaneAirIonChamber4U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber4U/Wall2/TransZ           = Ge/PlaneAirIonChamber4U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber4U/Wall2/TransY           = Ge/PlaneAirIonChamber4U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber4U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber4U/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamber4U/Wall2/DrawingStyle     = "Solid"

######## 5

s:Ge/PlaneAirIonChamber5U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber5U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber5U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber5U/Wall1/RMax             = Ge/PlaneAirIonChamber4U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber5U/Wall1/TransZ           = Ge/PlaneAirIonChamber4U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber5U/Wall1/TransY           = Ge/PlaneAirIonChamber4U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber5U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber5U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber5U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber5U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber5U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber5U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber5U/Active/RMax            = Ge/PlaneAirIonChamber5U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber5U/Active/TransZ          = Ge/PlaneAirIonChamber5U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber5U/Active/TransY          = Ge/PlaneAirIonChamber5U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber5U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber5U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber5U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber5U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber5U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber5U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber5U/Wall2/RMax             = Ge/PlaneAirIonChamber5U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber5U/Wall2/TransZ           = Ge/PlaneAirIonChamber5U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber5U/Wall2/TransY           = Ge/PlaneAirIonChamber5U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber5U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber5U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber5U/Wall2/DrawingStyle     = "Solid"

######## 6

s:Ge/PlaneAirIonChamber6U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber6U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber6U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber6U/Wall1/RMax             = Ge/PlaneAirIonChamber5U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber6U/Wall1/TransZ           = Ge/PlaneAirIonChamber5U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber6U/Wall1/TransY           = Ge/PlaneAirIonChamber5U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber6U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber6U/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamber6U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber6U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber6U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber6U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber6U/Active/RMax            = Ge/PlaneAirIonChamber6U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber6U/Active/TransZ          = Ge/PlaneAirIonChamber6U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber6U/Active/TransY          = Ge/PlaneAirIonChamber6U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber6U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber6U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber6U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber6U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber6U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber6U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber6U/Wall2/RMax             = Ge/PlaneAirIonChamber6U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber6U/Wall2/TransZ           = Ge/PlaneAirIonChamber6U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber6U/Wall2/TransY           = Ge/PlaneAirIonChamber6U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber6U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber6U/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamber6U/Wall2/DrawingStyle     = "Solid"

######## 7

s:Ge/PlaneAirIonChamber7U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber7U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber7U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber7U/Wall1/RMax             = Ge/PlaneAirIonChamber6U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber7U/Wall1/TransZ           = Ge/PlaneAirIonChamber6U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber7U/Wall1/TransY           = Ge/PlaneAirIonChamber6U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber7U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber7U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber7U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber7U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber7U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber7U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber7U/Active/RMax            = Ge/PlaneAirIonChamber7U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber7U/Active/TransZ          = Ge/PlaneAirIonChamber7U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber7U/Active/TransY          = Ge/PlaneAirIonChamber7U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber7U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber7U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber7U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber7U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber7U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber7U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber7U/Wall2/RMax             = Ge/PlaneAirIonChamber7U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber7U/Wall2/TransZ           = Ge/PlaneAirIonChamber7U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber7U/Wall2/TransY           = Ge/PlaneAirIonChamber7U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber7U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber7U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber7U/Wall2/DrawingStyle     = "Solid"

######## 8

s:Ge/PlaneAirIonChamber8U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber8U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber8U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber8U/Wall1/RMax             = Ge/PlaneAirIonChamber7U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber8U/Wall1/TransZ           = Ge/PlaneAirIonChamber7U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber8U/Wall1/TransY           = Ge/PlaneAirIonChamber7U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber8U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber8U/Wall1/Color            = "Grey"
s:Ge/PlaneAirIonChamber8U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber8U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber8U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber8U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber8U/Active/RMax            = Ge/PlaneAirIonChamber8U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber8U/Active/TransZ          = Ge/PlaneAirIonChamber8U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber8U/Active/TransY          = Ge/PlaneAirIonChamber8U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber8U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber8U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber8U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber8U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber8U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber8U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber8U/Wall2/RMax             = Ge/PlaneAirIonChamber8U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber8U/Wall2/TransZ           = Ge/PlaneAirIonChamber8U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber8U/Wall2/TransY           = Ge/PlaneAirIonChamber8U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber8U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber8U/Wall2/Color            = "Grey"
s:Ge/PlaneAirIonChamber8U/Wall2/DrawingStyle     = "Solid"


######## 9

s:Ge/PlaneAirIonChamber9U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber9U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber9U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber9U/Wall1/RMax             = Ge/PlaneAirIonChamber8U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber9U/Wall1/TransZ           = Ge/PlaneAirIonChamber8U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber9U/Wall1/TransY           = Ge/PlaneAirIonChamber8U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber9U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber9U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber9U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber9U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber9U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber9U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber9U/Active/RMax            = Ge/PlaneAirIonChamber9U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber9U/Active/TransZ          = Ge/PlaneAirIonChamber9U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber9U/Active/TransY          = Ge/PlaneAirIonChamber9U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber9U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber9U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber9U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber9U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber9U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber9U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber9U/Wall2/RMax             = Ge/PlaneAirIonChamber9U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber9U/Wall2/TransZ           = Ge/PlaneAirIonChamber9U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber9U/Wall2/TransY           = Ge/PlaneAirIonChamber9U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber9U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber9U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber9U/Wall2/DrawingStyle     = "Solid"

######## 10

s:Ge/PlaneAirIonChamber10U/Wall1/Parent           = "World"
s:Ge/PlaneAirIonChamber10U/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber10U/Wall1/Material         = "Graphite"
d:Ge/PlaneAirIonChamber10U/Wall1/RMax             = Ge/PlaneAirIonChamber9U/Wall1/RMax + 0.1 cm
d:Ge/PlaneAirIonChamber10U/Wall1/TransZ           = Ge/PlaneAirIonChamber9U/Wall1/TransZ - 0.5 cm
d:Ge/PlaneAirIonChamber10U/Wall1/TransY           = Ge/PlaneAirIonChamber9U/Wall1/TransY - 0.1 cm  
d:Ge/PlaneAirIonChamber10U/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber10U/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber10U/Wall1/DrawingStyle     = "Solid"

s:Ge/PlaneAirIonChamber10U/Active/Parent          = "World"
s:Ge/PlaneAirIonChamber10U/Active/Type            = "TsCylinder"
s:Ge/PlaneAirIonChamber10U/Active/Material        = "Air"
d:Ge/PlaneAirIonChamber10U/Active/RMax            = Ge/PlaneAirIonChamber10U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber10U/Active/TransZ          = Ge/PlaneAirIonChamber10U/Wall1/TransZ   - 0.03 cm
d:Ge/PlaneAirIonChamber10U/Active/TransY          = Ge/PlaneAirIonChamber10U/Wall1/TransY cm  
d:Ge/PlaneAirIonChamber10U/Active/HL              = 0.025 cm
s:Ge/PlaneAirIonChamber10U/Active/Color           = "Green"
s:Ge/PlaneAirIonChamber10U/Active/DrawingStyle    = "Solid"

s:Ge/PlaneAirIonChamber10U/Wall2/Parent           = "World"
s:Ge/PlaneAirIonChamber10U/Wall2/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber10U/Wall2/Material         = "Graphite"
d:Ge/PlaneAirIonChamber10U/Wall2/RMax             = Ge/PlaneAirIonChamber10U/Wall1/RMax cm
d:Ge/PlaneAirIonChamber10U/Wall2/TransZ           = Ge/PlaneAirIonChamber10U/Active/TransZ - 0.03 cm
d:Ge/PlaneAirIonChamber10U/Wall2/TransY           = Ge/PlaneAirIonChamber10U/Wall1/TransY cm
d:Ge/PlaneAirIonChamber10U/Wall2/HL               = 0.05 mm
s:Ge/PlaneAirIonChamber10U/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber10U/Wall2/DrawingStyle     = "Solid"