
includeFile = ../Parameters/SimulationParameters.txt

##################################################### Create Plane AirIonChamber ####################################################

b:Ge/PlaneAirIonChamber/Wall1/IsParallel = "True"

s:Ge/PlaneAirIonChamber/Wall1/Parent           = "WaterPhantom"
s:Ge/PlaneAirIonChamber/Wall1/Type             = "TsCylinder"
s:Ge/PlaneAirIonChamber/Wall1/Material         = "Graphite"

d:Ge/PlaneAirIonChamber/Wall1/RMax             = 0.5 cm

d:Ge/PlaneAirIonChamber/Wall1/TransZ           = 18.2 cm  #max dose a 7.5MeV

d:Ge/PlaneAirIonChamber/Wall1/HL               = 0.005 cm
s:Ge/PlaneAirIonChamber/Wall1/Color            = "Yellow"
s:Ge/PlaneAirIonChamber/Wall1/DrawingStyle     = "Solid"

b:Ge/PlaneAirIonChamber/Active/IsParallel = "True"

s:Ge/PlaneAirIonChamber/Active/Parent         = "WaterPhantom"
s:Ge/PlaneAirIonChamber/Active/Type           = "TsCylinder"
s:Ge/PlaneAirIonChamber/Active/Material       = "Air"

d:Ge/PlaneAirIonChamber/Active/RMax           = 0.5 cm
d:Ge/PlaneAirIonChamber/Active/HL             = 0.025 cm

d:Ge/PlaneAirIonChamber/Active/TransZ         = Ge/PlaneAirIonChamber/Wall1/TransZ   - 0.03 cm

s:Ge/PlaneAirIonChamber/Active/Color          = "Green"
s:Ge/PlaneAirIonChamber/Active/DrawingStyle   = "Solid"

b:Ge/PlaneAirIonChamber/Wall2/IsParallel = "True"

s:Ge/PlaneAirIonChamber/Wall2/Parent            = "WaterPhantom"
s:Ge/PlaneAirIonChamber/Wall2/Type              = "TsCylinder"
s:Ge/PlaneAirIonChamber/Wall2/Material          = "Graphite"

d:Ge/PlaneAirIonChamber/Wall2/RMax             = 0.5 cm
d:Ge/PlaneAirIonChamber/Wall2/HL               = 0.1 mm
d:Ge/PlaneAirIonChamber/Wall2/TransZ           = Ge/PlaneAirIonChamber/Active/TransZ - 0.03 cm
s:Ge/PlaneAirIonChamber/Wall2/Color            = "Yellow"
s:Ge/PlaneAirIonChamber/Wall2/DrawingStyle     = "Solid"