includeFile = ../Components/VacuumTube.txt
includeFile = ../Components/PrimaryScatterFoil.txt

includeFile = ../Components/PrimaryCollimators.txt
includeFile = ../Components/SecondaryCollimators.txt

includeFile = ../Components/PlaneAirIonChamber.txt
includeFile = ../Components/WaterPhantom.txt

includeFile = ../Beams/SingleBeam.txt

includeFile = ../Parameters/SimulationParameters.txt
#includeFile = ../Parameters/GraphicsParameters.txt

########################################################## Create World #######################################################

s:Ge/World/Material         = "Air"
d:Ge/World/HLX              = 1.1 m
d:Ge/World/HLY              = 1.1 m
d:Ge/World/HLZ              = 1.1 m
b:Ge/World/Invisible        = "False"

s:Ge/BeamPosition/Parent    = "World"
d:Ge/BeamPosition/TransZ    = Ge/SAD + Ge/VacuumTube/HL cm

sv:Ph/Default/LayeredMassGeometryWorlds = 3 "PlaneAirIonChamber/Wall1" "PlaneAirIonChamber/Active" "PlaneAirIonChamber/Wall2"

##################################################### Simulation Settings ###########################################################

i:Tf/Verbosity              = 0
Ts/NumberOfThreads          = 0            #all available threads
b:Ts/ShowCPUTime            = "True"
i:Ts/ShowHistoryCountAtInterval = 100000