includeFile = ../Components/VacuumTube.txt
includeFile = ../Components/PrimaryScatterFoil.txt

includeFile = ../Components/PrimaryCollimators.txt
includeFile = ../Components/SecondaryCollimators.txt

includeFile = ../Components/WaterPhantom.txt

includeFile = ../Parameters/SimulationParameters.txt
#includeFile = ../Parameters/GraphicsParameters.txt

########################################################## Create World #######################################################

s:Ge/World/Material         = "Air"
d:Ge/World/HLX              = 1.1 m
d:Ge/World/HLY              = 1.1 m
d:Ge/World/HLZ              = 1.1 m
b:Ge/World/Invisible        = "False"

sv:Ph/Default/LayeredMassGeometryWorlds = 3 "CylAirIonChamber/Wall" "CylAirIonChamber/Active" "CylAirIonChamber/Electrode"

s:Ge/BeamPosition/Parent    = "World"
d:Ge/BeamPosition/TransZ    = Ge/SAD + Ge/VacuumTube/HL cm

##################################################### Simulation Settings ###########################################################

i:Tf/Verbosity              = 0
Ts/NumberOfThreads          = 0            #all available threads
b:Ts/ShowCPUTime            = "True"
i:Ts/ShowHistoryCountAtInterval = 100000

##################################################### In case of MultiBeam Source #####################################################

includeFile = ../Components/CylinderAirIonChamber.txt
includeFile = ../Beams/SingleBeam.txt

#includeFile = ../Components/StepCylinderAirIonChamber.txt
#includeFile = ../Beams/MultiBeams.txt

#d:Tf/TimelineStart           = 0. ms
#d:Tf/TimelineEnd             = 100.0 ms
#i:Tf/NumberOfSequentialTimes = 10