includeFile = ../Components/VacuumTube.txt
#includeFile = ../Components/PrimaryScatterFoil.txt

includeFile = ../Components/PrimaryCollimators.txt
includeFile = ../Components/SecondaryCollimators.txt

#includeFile= ../Components/AluminumDetectors.txt

includeFile = ../Components/WaterPhantom.txt

includeFile = ../Parameters/SimulationParameters.txt
#includeFile = ../Parameters/GraphicsParameters.txt

########################################################## Create World #######################################################

s:Ge/World/Material         = "Air"
d:Ge/World/HLX              = 1.1 m
d:Ge/World/HLY              = 1.1 m
d:Ge/World/HLZ              = 1.1 m
b:Ge/World/Invisible        = "False"

s:Ge/Isocenter/Parent = "World"
s:Ge/Isocenter/Type   = "TsBox"
s:Ge/Isocenter/Material = "Air"
d:Ge/Isocenter/HLX      = 30 cm 
d:Ge/Isocenter/HLY      = 30 cm 
d:Ge/Isocenter/HLZ      = 0.05 cm
d:Ge/Isocenter/TransZ   = 0.1 cm 
s:Ge/Isocenter/DrawingStyle = "Solid"
s:Ge/Isocenter/Color = "Yellow"

s:Ge/BeamPosition/Parent    = "World"
d:Ge/BeamPosition/TransZ    = Ge/SAD + Ge/VacuumTube/HL cm
b:Ge/QuitIfOverlapDetected = "False"

##################################################### Simulation Settings ###########################################################

i:Tf/Verbosity              = 0
Ts/NumberOfThreads          = 0            #all available threads
b:Ts/ShowCPUTime            = "True"
i:Ts/ShowHistoryCountAtInterval = 100000
#b:Ts/PauseBeforeQuit = "True" # Pause for Geant4 commands before quitting

##################################################### Set Beam and Ion Chamber #####################################################

#includeFile = ../Components/PlaneAirIonChamber.txt
#includeFile = ../Components/CylinderAirIonChamber.txt

#includeFile = ../Components/StepPlaneAirIonChamber.txt
#includeFile = ../Components/StepCylinderAirIonChamber.txt

#sv:Ph/Default/LayeredMassGeometryWorlds = 3 "PlaneAirIonChamber/Wall1" "PlaneAirIonChamber/Active" "PlaneAirIonChamber/Wall2"
#sv:Ph/Default/LayeredMassGeometryWorlds = 3 "CylAirIonChamber/Wall" "CylAirIonChamber/Active" "CylAirIonChamber/Electrode"

includeFile = ../Beams/SingleBeam.txt
#includeFile = ../Beams/MultiBeams.txt

#d:Tf/TimelineStart           = 0. ms
#d:Tf/TimelineEnd             = 100.0 ms
#i:Tf/NumberOfSequentialTimes = 10