
includeFile = ../Configurations/MainConf.txt

###################################################### Pdd WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterPhantom"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtWaterPhantom"
i:Sc/DoseAtWaterPhantom/XBins                     = 100
i:Sc/DoseAtWaterPhantom/YBins                     = 100
i:Sc/DoseAtWaterPhantom/ZBins                     = 100


###################################################### Energy Fluence WaterPhantom #####################################################

s:Sc/EnergyFluenceAtIsocenter/Quantity                  = "EnergyFluence"
s:Sc/EnergyFluenceAtIsocenter/Component                 = "Isocenter"
s:Sc/EnergyFluenceAtIsocenter/IfOutputFileAlreadyExists = "Increment"
s:Sc/EnergyFluenceAtIsocenter/OutputType                = "Csv"
s:Sc/EnergyFluenceAtIsocenter/OutputFile                = "EnergyFluenceAtIsocenter"
i:Sc/EnergyFluenceAtIsocenter/XBins                     = 60
i:Sc/EnergyFluenceAtIsocenter/YBins                     = 60


################################################# Scorer Energy Dep Spec ###############################################

s:Sc/EnergyDepSpectAtWaterPhantom/Component        = "WaterPhantom"
s:Sc/EnergyDepSpectAtWaterPhantom/OutputFile       = "EnergyDepSpectAtWaterPhantom"
s:Sc/EnergyDepSpectAtWaterPhantom/Quantity         = "EnergyDeposit"
s:Sc/EnergyDepSpectAtWaterPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/EnergyDepSpectAtWaterPhantom/OutputType       = "Csv"
i:Sc/EnergyDepSpectAtWaterPhantom/EBins            = 100
d:Sc/EnergyDepSpectAtWaterPhantom/EBinMin          = 0. MeV
d:Sc/EnergyDepSpectAtWaterPhantom/EBinMax          = 15. MeV
#d:Sc/EnergyDepSpectAtWaterPhantom/EBinMax          = 24. MeV

##################################################### Dose to Water at Plane AirIonChambers Upper ####################################################

s:Sc/DoseToWaterICU1/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU1/Component                 = "PlaneAirIonChamber1U/Active"
s:Sc/DoseToWaterICU1/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU1/OutputType                = "Csv"
s:Sc/DoseToWaterICU1/OutputFile                = "DoseToWaterICU1"

s:Sc/DoseToWaterICU2/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU2/Component                 = "PlaneAirIonChamber2U/Active"
s:Sc/DoseToWaterICU2/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU2/OutputType                = "Csv"
s:Sc/DoseToWaterICU2/OutputFile                = "DoseToWaterICU2"

s:Sc/DoseToWaterICU3/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU3/Component                 = "PlaneAirIonChamber3U/Active"
s:Sc/DoseToWaterICU3/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU3/OutputType                = "Csv"
s:Sc/DoseToWaterICU3/OutputFile                = "DoseToWaterICU3"

s:Sc/DoseToWaterICU4/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU4/Component                 = "PlaneAirIonChamber4U/Active"
s:Sc/DoseToWaterICU4/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU4/OutputType                = "Csv"
s:Sc/DoseToWaterICU4/OutputFile                = "DoseToWaterICU4"

s:Sc/DoseToWaterICU5/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU5/Component                 = "PlaneAirIonChamber5U/Active"
s:Sc/DoseToWaterICU5/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU5/OutputType                = "Csv"
s:Sc/DoseToWaterICU5/OutputFile                = "DoseToWaterICU5"

s:Sc/DoseToWaterICU6/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU6/Component                 = "PlaneAirIonChamber6U/Active"
s:Sc/DoseToWaterICU6/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU6/OutputType                = "Csv"
s:Sc/DoseToWaterICU6/OutputFile                = "DoseToWaterICU6"

s:Sc/DoseToWaterICU7/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU7/Component                 = "PlaneAirIonChamber7U/Active"
s:Sc/DoseToWaterICU7/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU7/OutputType                = "Csv"
s:Sc/DoseToWaterICU7/OutputFile                = "DoseToWaterICU7"

s:Sc/DoseToWaterICU8/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU8/Component                 = "PlaneAirIonChamber8U/Active"
s:Sc/DoseToWaterICU8/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU8/OutputType                = "Csv"
s:Sc/DoseToWaterICU8/OutputFile                = "DoseToWaterICU8"

s:Sc/DoseToWaterICU9/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU9/Component                 = "PlaneAirIonChamber9U/Active"
s:Sc/DoseToWaterICU9/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU9/OutputType                = "Csv"
s:Sc/DoseToWaterICU9/OutputFile                = "DoseToWaterICU9"

s:Sc/DoseToWaterICU10/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICU10/Component                 = "PlaneAirIonChamber10U/Active"
s:Sc/DoseToWaterICU10/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICU10/OutputType                = "Csv"
s:Sc/DoseToWaterICU10/OutputFile                = "DoseToWaterICU10"

##################################################### Dose to Water at Plane AirIonChambers Down ####################################################

s:Sc/DoseToWaterICD1/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD1/Component                 = "PlaneAirIonChamber1D/Active"
s:Sc/DoseToWaterICD1/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD1/OutputType                = "Csv"
s:Sc/DoseToWaterICD1/OutputFile                = "DoseToWaterICD1"

s:Sc/DoseToWaterICD2/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD2/Component                 = "PlaneAirIonChamberD2/Active"
s:Sc/DoseToWaterICD2/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD2/OutputType                = "Csv"
s:Sc/DoseToWaterICD2/OutputFile                = "DoseToWaterICD2"

s:Sc/DoseToWaterICD3/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD3/Component                 = "PlaneAirIonChamberD3/Active"
s:Sc/DoseToWaterICD3/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD3/OutputType                = "Csv"
s:Sc/DoseToWaterICD3/OutputFile                = "DoseToWaterICD3"

s:Sc/DoseToWaterICD4/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD4/Component                 = "PlaneAirIonChamberD4/Active"
s:Sc/DoseToWaterICD4/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD4/OutputType                = "Csv"
s:Sc/DoseToWaterICD4/OutputFile                = "DoseToWaterICD4"

s:Sc/DoseToWaterICD5/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD5/Component                 = "PlaneAirIonChamberD5/Active"
s:Sc/DoseToWaterICD5/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD5/OutputType                = "Csv"
s:Sc/DoseToWaterICD5/OutputFile                = "DoseToWaterICD5"

s:Sc/DoseToWaterICD6/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD6/Component                 = "PlaneAirIonChamberD6/Active"
s:Sc/DoseToWaterICD6/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD6/OutputType                = "Csv"
s:Sc/DoseToWaterICD6/OutputFile                = "DoseToWaterICD6"

s:Sc/DoseToWaterICD7/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD7/Component                 = "PlaneAirIonChamberD7/Active"
s:Sc/DoseToWaterICD7/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD7/OutputType                = "Csv"
s:Sc/DoseToWaterICD7/OutputFile                = "DoseToWaterICD7"

s:Sc/DoseToWaterICD8/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD8/Component                 = "PlaneAirIonChamberD8/Active"
s:Sc/DoseToWaterICD8/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD8/OutputType                = "Csv"
s:Sc/DoseToWaterICD8/OutputFile                = "DoseToWaterICD8"

s:Sc/DoseToWaterICD9/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD9/Component                 = "PlaneAirIonChamberD9/Active"
s:Sc/DoseToWaterICD9/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD9/OutputType                = "Csv"
s:Sc/DoseToWaterICD9/OutputFile                = "DoseToWaterICD9"

s:Sc/DoseToWaterICD10/Quantity                  = "DoseToWater"
s:Sc/DoseToWaterICD10/Component                 = "PlaneAirIonChamberD10/Active"
s:Sc/DoseToWaterICD10/IfOutputFileAlreadyExists = "Increment"
s:Sc/DoseToWaterICD10/OutputType                = "Csv"
s:Sc/DoseToWaterICD10/OutputFile                = "DoseToWaterICD10"