
includeFile = ../Configurations/ConfWithIC.txt

###################################################### Pdd WaterPhantom #####################################################

s:Sc/PddWaterAtPhantom/Quantity                  = "DoseToMedium"
s:Sc/PddWaterAtPhantom/Component                 = "WaterPhantom"
s:Sc/PddWaterAtPhantom/IfOutputFileAlreadyExists = "Increment"
s:Sc/PddWaterAtPhantom/OutputType                = "Csv"
s:Sc/PddWaterAtPhantom/OutputFile                = "PddWaterAtPhantom"
i:Sc/PddWaterAtPhantom/ZBins                     = 100

###################################################### Dose Profile WaterPhantom #####################################################

s:Sc/DoseProfileAtWaterPhantom/Quantity                   = "DoseToMedium"
s:Sc/DoseProfileAtWaterPhantom/Component                  = "WaterPhantom"
s:Sc/DoseProfileAtWaterPhantom/OutputFile                 = "DoseProfileAtWaterPhantom"
s:Sc/DoseProfileAtWaterPhantom/IfOutputFileAlreadyExists  = "Increment"
s:Sc/DoseProfileAtWaterPhantom/OutputType                 = "Csv"
i:Sc/DoseProfileAtWaterPhantom/XBins                      = 100
i:Sc/DoseProfileAtWaterPhantom/YBins                      = 100

################################################# Scorer Energy Dep Spec ###############################################

s:Sc/EnergyDepAtWaterPhantom/Component        = "WaterPhantom"
s:Sc/EnergyDepAtWaterPhantom/OutputFile       = "EnergyDepSpec"
s:Sc/EnergyDepAtWaterPhantom/Quantity         = "EnergyDeposit"
s:Sc/EnergyDepAtWaterPhantom/OutputType       = "Csv"
i:Sc/EnergyDepAtWaterPhantom/EBins            = 100
d:Sc/EnergyDepAtWaterPhantom/EBinMin          = 0. MeV
d:Sc/EnergyDepAtWaterPhantom/EBinMax          = 15. MeV

##################################################### Dose to Water at Plane AirIonChamber ####################################################

s:Sc/DoseToWaterAtPlaneAirIC/Quantity                  = "DoseToMedium"
s:Sc/DoseToWaterAtPlaneAirIC/Component                 = "PlaneAirIonChamber/Active"
s:Sc/DoseToWaterAtPlaneAirIC/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseToWaterAtPlaneAirIC/SplitByTimeFeature        = "ZPlaneAirIonChamber"
s:Sc/DoseToWaterAtPlaneAirIC/OutputType                = "Csv"
s:Sc/DoseToWaterAtPlaneAirIC/OutputFile                = "DoseToWaterAtPlaneAirIC"