
includeFile = ../Configurations/ConfNoIC.txt

###################################################### Dose Profile WaterPhantom #####################################################

s:Sc/DoseProfileAtWaterPhantom/Quantity                   = "DoseToMedium"
s:Sc/DoseProfileAtWaterPhantom/Component                  = "WaterPhantom"
s:Sc/DoseProfileAtWaterPhantom/OutputFile                 = "DoseProfileAtWaterPhantom"
s:Sc/DoseProfileAtWaterPhantom/IfOutputFileAlreadyExists  = "Increment"
s:Sc/DoseProfileAtWaterPhantom/OutputType                 = "Csv"
i:Sc/DoseProfileAtWaterPhantom/XBins                      = 100
i:Sc/DoseProfileAtWaterPhantom/YBins                      = 100