
includeFile = ../Configurations/Conf0.txt

############################################# Energy Fluence At WaterPhantom ##################################################

s:Sc/EnergyFluenceAtPhantom/Quantity                   = "EnergyFluence"
s:Sc/EnergyFluenceAtPhantom/Component                  = "WaterPhantom"
s:Sc/EnergyFluenceAtPhantom/OutputFile                 = "EnergyFluenceAtPhantom"
s:Sc/EnergyFluenceAtPhantom/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/EnergyFluenceAtPhantom/OutputType                 = "Csv"
sv:Sc/EnergyFluenceAtPhantom/OnlyIncludeParticlesNamed = 1 "e-"

###################################################### Dose At WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterPhantom"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtPhantom"