
includeFile = ../Configurations/Conf1.txt

############################################# Energy Fluence At WaterPhantom ##################################################

s:Sc/EnergyFluenceAtPhantom/Quantity                   = "EnergyFluence"
s:Sc/EnergyFluenceAtPhantom/Component                  = "WaterPhantom"
s:Sc/EnergyFluenceAtPhantom/OutputFile                 = "EnergyFluenceAtPhantom"
s:Sc/EnergyFluenceAtPhantom/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/EnergyFluenceAtPhantom/OutputType                 = "Csv"
sv:Sc/EnergyFluenceAtPhantom/OnlyIncludeParticlesNamed = 1 "e-"

###################################################### Dose At WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterPhantom"
b:Sc/DoseAtWaterPhantom/OutputToConsole           = "TRUE"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtPhantom"

##################################################### Dose at Plane AirIonChamber ####################################################

#s:Sc/DoseAtPlaneAirIC/Quantity                  = "DoseToMedium"
#s:Sc/DoseAtPlaneAirIC/Component                 = "PlaneAirIonChamber/Active"
#b:Sc/DoseAtPlaneAirIC/OutputToConsole           = "TRUE"
#s:Sc/DoseAtPlaneAirIC/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseAtPlaneAirIC/SplitByTimeFeature        = "ZPlaneAirIonChamber"